PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = choiceRTT
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Routines
  Routine main
    ImageComponent pos1
      image = plainWhite.png
      pos [set every repeat] = [-.375, 0]
      size = (0.20, 0.20)
      startVal [time (s)] = 0
      units = height
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    ImageComponent pos2
      image = plainWhite.png
      pos [set every repeat] = [-.125, 0]
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      units = height
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    ImageComponent pos3
      image = plainWhite.png
      pos [set every repeat] = [.125, 0]
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      units = height
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    ImageComponent pos4
      image = plainWhite.png
      pos [set every repeat] = [.375, 0]
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      units = height
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    ImageComponent targImage
      image = tarX.png
      pos [set every repeat] = [xPos, 0]
      size = (0.2, 0.2)
      startVal [time (s)] = isi
      units = height
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    KeyboardComponent response
      allowedKeys = 'c','v','b','n'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = isi
      storeCorrect = True
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    MouseComponent mouseResp
      clickable = targImage
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = isi
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  Routine instructions
    TextComponent instr
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      units = height
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      text:
        In this task you will push the c, v, b, and n keys whenever you see the target 'X' appear in one of the four boxes.

        First, we shall have a practice.

        Push space bar or click/touch to begin the practice session.
    KeyboardComponent startInst
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent startMouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine startTask
    TextComponent ready
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Now we shall begin the actual experiment.

        Ready?

        Push space bar or click/touch to begin.
    KeyboardComponent go
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouseGo
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = height
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      text:
        Thanks you for participanting!

        This part of experiment is now over.
Flow
  Routine instructions
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = srttPractice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('isi', 1), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1), ('xPos', 0.375), ('corrAns', 'n')])]
    Routine main
  LoopTerminator practiceTrials
  Routine startTask
  LoopInitiator mainTrials loopType="TrialHandler"
    conditionsFile = srttConditions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('isi', 1.0), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.0), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.0), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.0), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1.2222), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.2222), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.2222), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.2222), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1.4444), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.4444), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.4444), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.4444), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1.6666), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.6666), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.6666), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.6666), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 1.8888), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 1.8888), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 1.8888), ('xPos', 0.125), ('corrAns', 'b')]),
      OrderedDict([('isi', 1.8888), ('xPos', 0.375), ('corrAns', 'n')]),
      OrderedDict([('isi', 2.111), ('xPos', -0.375), ('corrAns', 'c')]),
      OrderedDict([('isi', 2.111), ('xPos', -0.125), ('corrAns', 'v')]),
      OrderedDict([('isi', 2.111), ('xPos', 0.125), ('corrAns', 'b')])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
    Routine main
  LoopTerminator mainTrials
  Routine thanks
